PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = deg
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = DelayMatchtoCategory
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 0
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Routines
  Routine instructionRoutine
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    TextComponent instructionText
      letterHeight = 0.5
      startVal [time (s)] = 0.0
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      text:
        Instrcution

        When you see a white fixation cross press the spacebar.

        Release the spacebar when the test category matches the sample category.

        Press enter key to proceed.
    KeyboardComponent welcomeResp
      allowedKeys = 'return','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixationRoutine
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    TextComponent fixationWhite
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent trialSetupCode
      Code Type = Py
      Begin Routine:
        dotPosition = dotPositions[trials.thisN]
        dotLocation = (dotPosition*dotLocationX, dotLocationY)
        categoryMatch = False
        gazeShift = 0
  Routine exitRoutine
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    TextComponent exitText
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        Thank you for participating in the experiment.

        Press space key to exit the screen.
    KeyboardComponent exitResp
      allowedKeys =  'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine responseRoutine
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    TextComponent fixationGreen
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine routine_1
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  Routine sampleRoutine
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    TextComponent fixationGreenSample
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.15
      text = +
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    DotsComponent sampleDots
      coherence = 1.0
      dir = 0
      dotLife = 3
      dotSize = 3
      fieldPos = (5.0, 0.0)
      fieldShape = circle
      fieldSize = 5.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.65
      units = deg
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    KeyboardComponent keyRespSample
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.15
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    CodeComponent sampleSetupCode
      Code Type = Py
      Begin Routine:
        sampleDots.fieldPos = dotLocation
        sampleDots.dir = sampleDirections[trials.thisN]
  Routine delayRoutine
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    TextComponent fixationGreenDelay
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyRespDelay
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine testRoutine
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    TextComponent fixationGreenTest
      color = -1.0000, 1.0000, -1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent keyRespTestPress
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    KeyboardComponent keyRespTestRelease
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
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    DotsComponent testDots
      coherence = 1.0
      dir = 0
      dotLife = 3
      dotSize = 3
      fieldPos = (5.0, 0.0)
      fieldShape = circle
      fieldSize = 5.0
      nDots = 100
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.65
      units = deg
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    CodeComponent testSetupCode
      Code Type = Py
      Begin Routine:
        testDots.fieldPos = dotLocation
        testDots.dir = testDirections[trials.thisN]
      End Routine:
        categoryMatch = sampleCategories[trials.thisN]   == testCategories[trials.thisN]
        print('keyReleased',keyRespTestRelease.keys)
        if categoryMatch:
            if keyRespTestRelease.keys == 'space': # release
                correct = 'Correct'
            else: # no release
                correct = 'Incorrect'
        else:
            if keyRespTestRelease.keys == 'space': # release
                correct = 'Incorrect'
            else: # no release
                correct = 'Correct'

        fixation = "Keep Fixation" if gazeShift > 2 else ""
  Routine feedbackRoutine
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    TextComponent feedbackText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Feedback Text
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    CodeComponent feedbackCode
      Code Type = Py
      Begin Routine:
        feedbackText.setText(f"{correct} \n {fixation}")
  Routine expSetup
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    CodeComponent setupCode
      Code Type = Py
      Before Experiment:
        import random

        #Experiment Environment Variables Start
        dotLocationX = 5 # X cord of dot stimuli in deg
        dotLocationY = 0  # Y cord of dot stimuli in deg
        dotDirections = list(range(0,180,45))
        dotCoherence = 1 # Proporiton of dots in same direction
        dotPosition = 1 #dot Position either left [-1] or right [1]
        nDirections = 4
        nReps = 1
        #Experiment Environment Variables End


        totalTrials = nDirections*2
        nhalf = int(totalTrials/2)

        def make_50_percent_match(arr):
            if len(arr) % 2 != 0:
                raise ValueError("Array length must be even to allow exactly 50% match.")

            n = len(arr)
            half = n // 2
            indices = list(range(n))

            # Randomly choose half of the indices to match
            match_indices = set(random.sample(indices, half))

            result = []
            for i in range(n):
                if i in match_indices:
                    # Match the original value
                    result.append(arr[i])
                else:
                    # Mismatch: choose a value different from the original
                    possible_values = set(arr) - {arr[i]}
                    if not possible_values:
                        raise ValueError("Cannot ensure mismatch due to lack of alternative values.")
                    result.append(random.choice(list(possible_values)))

            return result
      Begin Routine:
        assert totalTrials%nDirections == 0,"Total Number of trials should be multple of number of unique directions"

        dotPositions= [1 for i in range(nhalf)]+[-1 for i in range(nhalf)]
        random.shuffle(dotPositions)

        categoryA = [0,-45,-90]

        categoryB = [180,45,90]

        sampleDirections = categoryA+categoryB
        sampleDirections = [item for _ in range(2) for item in sampleDirections]

        sampleDirections = [item for _ in range(nReps) for item in sampleDirections]

        random.shuffle(sampleDirections)

        sampleCategories = ['A' if direction in categoryA else 'B' for direction in sampleDirections]

        testCategories = make_50_percent_match(sampleCategories)
        print("Sample",sampleCategories)
        print("Test",testCategories)

        testDirections = [random.choice(categoryB) if category=='B' else random.choice(categoryA)  for category in testCategories]
        print("Sample Directions",sampleDirections)
        print("Test Directions",testDirections)

        count = 0
        for i,_ in enumerate(testDirections):
            if  sampleCategories[i]==testCategories[i]:
                count += 1

        print("Proportion of match",count/len(testDirections)*100)
Flow
  Routine instructionRoutine
  Routine expSetup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = nDirections*2*1
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    Routine fixationRoutine
    Routine responseRoutine
    Routine sampleRoutine
    Routine delayRoutine
    Routine testRoutine
    Routine feedbackRoutine
  LoopTerminator trials
  Routine exitRoutine
