PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = MentalNavigation
  eyetracker = MouseGaze
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  mgBlink = ('LEFT_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 0
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 1.0
      dir = 0
      dotLife = 0
      dotSize = 5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 3
      nDots = 200
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      units = norm
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    ImageComponent targetLandmark
      image [set every repeat] = public/landmarks/images/imageset1/1.jpg
      pos = (0, -0.4)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent fixationGreen
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent keyPress
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRelease
      allowedKeys = 'left','right' 
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent move_images
      Code Type = Py
      Begin Routine:
        ## add logic to  add all images on a line
        dots.speed = 0

        for lm  in  landmarks:
            lm.opacity = 1
        targetLandmark.opacity = 1

        targetLandmark.image = f'public/landmarks/images/imageset1/{targetId}.jpg'

        win.flip()


        if targetReached:
            continueRoutine = False
      Each Frame:
        ## add logic to  move the image for each frame
        if  keyRelease.keys == 'left' or keyRelease.keys == 'right':
            targetReached = abs(abs(targetLandmark.pos[0] - landmarks[startId].pos[0]) -  abs(targetId-startId)) <= tolerance * landmarkWidth
        if keyPress.keys == 'left' or keyPress.keys  == 'right':
            if not visualMode:
                for lm  in  landmarks:
                    lm.opacity = 0
                targetLandmark.opacity = 0

        if  keyPress.keys == 'left':
            for lm in landmarks:
                if  landmarks[-1].pos[0]<-1:
                    break
                lm.pos -= (speed*dt,0)
            dots.dir =  180
        #    dots.speed = dt
            dots.dotLife = 60

        elif  keyPress.keys == 'right':
            for lm in landmarks:
                if  landmarks[0].pos[0]>1:
                    break
                lm.pos += (speed*dt,0)
            dots.dir = 0
        #    dots.speed =  dt
            dots.dotLife = 60
      End Routine:
        ## check if start and target is same
  Routine start
    RoutineSettingsComponent start
      disabled = True
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    PolygonComponent fixation
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine delay
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    PolygonComponent fixationRed2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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  Routine welcome
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    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        Fix your eyes on the screen.

        Press left or right keys to reach the target landmark.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine complete
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    TextComponent completionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your time
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    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VisualNavigation
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    PolygonComponent fixation_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine setup
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    PolygonComponent fixationRed
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0,1)
      units = norm
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    CodeComponent initializationCode
      Code Type = Py
      Before Experiment:
        import random
        from psychopy import event

        totalLandmarks  = 7
        landmarkWidth = 0.5
        landmarkHeight = 0.5
        interlmdistance = 0.5
        tolerance=0.25
        seed = random.randint(0,9999)

        random.seed(42)

        # Step 1: Build distance-to-pairs dictionary
        all_distance_to_pairs = {
            k: [(i, j) for i in range(totalLandmarks) for j in range(totalLandmarks)
                if abs(i - j) == k]
            for k in range(1, totalLandmarks)
        }

        # Step 2: Select half of the pairs for training
        training_pairs = {}

        for k, pairs in all_distance_to_pairs.items():
            shuffled = pairs.copy()
            random.shuffle(shuffled)
            half_n = len(shuffled) // 2
            training_pairs[k] = shuffled[:half_n]
      Begin Routine:
        dt = 0.01
        dots.speed = 0
        dots.dotLife = -1

        targetReached = False
        isTrain = True

        random.seed(None)

        distance_to_pairs = training_pairs if isTrain else all_distance_to_pairs
        distance  = random.randint(1,totalLandmarks-1)
        pairList = distance_to_pairs[distance].copy()
        random.shuffle(pairList)
        currentPair = random.choice(pairList)

        startId = currentPair[0]
        targetId =  currentPair[1]

        landmarks = [visual.ImageStim(
            win=win,
            name=str(i), units='norm',
            image=f'public/landmarks/images/imageset1/{i}.jpg', mask=None, anchor='center',
            ori=0.0, pos=[0,0], draggable=False, size=(landmarkWidth, landmarkHeight),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-1.0)
            for i in range(totalLandmarks)
            ]

        for index,lm in enumerate(landmarks):
            lm.pos = ((index - startId) * (landmarkWidth + interlmdistance),0.4)
            lm.setAutoDraw(True)
  Routine endTrial
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    CodeComponent endCode
      Code Type = Py
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      End Routine:
        for lm in landmarks:
            lm.clearTextures()
        del landmarks
  Routine reset
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    CodeComponent resetCode
      Code Type = Py
      End Routine:
        for lm in landmarks:
            lm.opacity = 0
            del lm
        del landmarks
        core.wait(0.2)
        eyeRecord = False
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine eyeSetup
    RoutineSettingsComponent eyeSetup
      disabled = True
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = True
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    CodeComponent setupC
      Code Type = Py
      disabled = True
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      Before Experiment:
        import random
        from psychopy import event

        totalLandmarks  = 7
        landmarkWidth = 0.5
        landmarkHeight = 0.5
        interlmdistance = 0.5
  Routine startEye
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine stopEye
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine blockSetup
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    CodeComponent blockSetup_2
      Code Type = Py
      Begin Routine:
        speedOptions = [1,1.5,1.5,1.5,1,1]
        visualModeOptions = [True,True,False,True,True,False]

        visualMode= visualModeOptions[blockTrials.thisN]
        speed = speedOptions[blockTrials.thisN]
Flow
  Routine welcome
  Routine eyeSetup
  LoopInitiator blockTrials loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine blockSetup
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 15
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      Routine setup
      LoopInitiator responseBlock loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 2
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        Routine trial
      LoopTerminator responseBlock
      Routine reset
    LoopTerminator trials
  LoopTerminator blockTrials
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine setup
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator trials_2
    Routine reset
  LoopTerminator trials_3
  Routine complete
