PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = MentalNavigation_Day1
  frameRate = 60
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 1.0
      dir = 0
      dotLife = 0
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 50
      nDots = 300
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      units = deg
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    ImageComponent targetLandmark
      image [set every repeat] = public/landmarks/images/imageset1/1.jpg
      pos = (0, targetLandmarkY)
      size = (landmarkWidth, landmarkHeight)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent fixationRedTrial
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = fixationSize
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent keyPress
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRelease
      allowedKeys = 'left','right' 
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent move_images
      Code Type = Py
      Begin Routine:
        ## add logic to  add all images on a line
        dots.speed = 0
        dots.dotLife = -1
        closestLMs = sorted(landmarks,key=lambda x:abs(x.pos[0]),reverse=False)

        if visualMode:
            for index,lm  in  enumerate(closestLMs):
                lm.opacity = 1
        else:
            closestLMs[0].opacity = 1
            closestIdx = closestLMs[0].idx
            leftLM = landmarks[closestIdx-1] if closestIdx>0 else landmarks[closestIdx]
            leftLM.opacity = 1
            rightLM = landmarks[closestIdx+1] if closestIdx<6 else landmarks[closestIdx]
            rightLM.opacity = 1


        targetLandmark.opacity = 1

        targetLandmark.image = f'public/landmarks/images/imageset1/{targetId}.jpg'


        if targetReached:
            score += 1
            continueRoutine = False
      Each Frame:
        ## add logic to  move the image for each frame
        if loopName == "blockTrials":
            completedTrials  = blockTrials.thisN
        elif loopName == "breakLoop":
            completedTrials = breakLoop.thisN

        if devMode:
            statusText = f"Current Time : {str(int(expClock.getTime()))} \n Completed Trials:{completedTrials}/{currentTrialDD} \n Score: {score} \n Speed: {speed} \n Step Size : {dt} \n Visual : {visualMode} "
        else:
            statusText = ''

        timeText.setText(statusText)

        if  keyRelease.keys == 'left' or keyRelease.keys == 'right':
            targetReached = abs(landmarks[targetId].pos[0])   <= tolerance * landmarkWidth
            dots.dir =  0
            dots.dotLife = -1
            dots.speed = 0

        if keyPress.keys == 'left' or keyPress.keys  == 'right':
            if not visualMode:
                for lm in  landmarks:
                    lm.opacity = 0
                    dotsArray[lm.idx].opacity = 0
                targetLandmark.opacity = 0

        if  keyPress.keys == 'left':
            dots.dir =  180
            for lm in landmarks:
                if  landmarks[-1].pos[0]<-1*edgeLandmarkDistance:
                    break
                lm.pos -= (speed*dt,0)
                dotsArray[lm.idx].pos -= (speed*dt,0)

            if  landmarks[-1].pos[0]<-1*edgeLandmarkDistance:
                dots.speed = 0
                dots.dotLife = -1
            else:
                dots.speed =  speed*dt
                dots.dotLife = dotLife

        elif  keyPress.keys == 'right':
            dots.dir = 0
            for lm in landmarks:
                if  landmarks[0].pos[0]>edgeLandmarkDistance:
                    break
                lm.pos += (speed*dt,0)
                dotsArray[lm.idx].pos += (speed*dt,0)
            if  landmarks[0].pos[0]>edgeLandmarkDistance:
                dots.speed = 0
                dots.dotLife = -1
            else:
                dots.speed =  speed*dt
                dots.dotLife = dotLife



        for lm in landmarks:
            dotsArray[lm.idx].opacity = lm.opacity
      End Routine:
        ## check if start and target is same
        if stopKey.keys == 's':
        #    print("Stopping experiment sending bye signal.")
            continueRoutine = False
            experimentExpired = True
            if loopName == 'blockTrials':
                responseBlock.finished = True
            elif loopName == 'breakLoop':
                responseBlock2.finished = True
    TextComponent timeText
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (6,-5)
      startVal [time (s)] = 0.0
      text = Time: 
      units = deg
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    KeyboardComponent stopKey
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start
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    PolygonComponent fixation
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine delay
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    PolygonComponent fixationRed2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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  Routine welcome
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    TextComponent welcomeText
      letterHeight = 0.75
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Mental Navigation Task

        Your goal is to reach the target image by continuously traversing through a sequence of images using the left/right arrow keys IN ONE SINGLE BUTTON PRESS.  You must fixate your eyes on the fixation point in the center of the screen.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine complete
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    TextComponent completionText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time.

        Press space or escape key to exit.
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VisualNavigation
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    PolygonComponent fixation_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine setup
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    PolygonComponent fixationRed
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = fixationSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0,0.5)
      units = deg
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    CodeComponent initializationCode
      Code Type = Py
      Begin Routine:
        dots.speed = 0
        dots.dotLife = -1
        turn = 1
        random.seed(None)

        startId = allPairs[currentTrialDD][0]
        targetId = allPairs[currentTrialDD][1]

        targetReached = False

        for  lm in  landmarks:
            # Position it
            lm.pos = ((lm.idx - startId) * (landmarkWidth + interLandmarkDistance), startLandmarkY)
            dotsArray[lm.idx].pos = lm.pos

            if not visualMode:
                if lm.idx not in [startId-1, startId, startId+1]:
                    lm.opacity = 0

                else:
                    lm.opacity = 1
            else:
                lm.opacity = 1

            dotsArray[lm.idx].opacity = lm.opacity

            dotsArray[lm.idx].setAutoDraw(True)
            lm.setAutoDraw(True)

        currentTrialDD+=1
  Routine endTrial
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    CodeComponent endCode
      Code Type = Py
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      End Routine:
        for lm in landmarks:
            lm.clearTextures()
        del landmarks
  Routine reset
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    CodeComponent resetCode
      Code Type = Py
      Begin Routine:

        if stopKey.keys == 's':
        #    print("Stopping experiment sending bye signal.")
            continueRoutine = False
            experimentExpired = True

        if expClock.getTime()>=totalTime:
        #    print("Time limit reached. Ending experiment")
            continueRoutine = False
            experimentExpired = True
      Each Frame:
        for index,lm in enumerate(landmarks):
            lm.opacity = 1
            dotsArray[index].opacity = 1

        targetLandmark2.image = targetLandmark.image
        targetLandmark2.opacity = 1
      End Routine:
        for index,lm in enumerate(landmarks):
            lm.opacity = 0
            dotsArray[index].opacity = 0

        if 'experimentExpired' in globals() and experimentExpired:
            print("Received experiment expired signal. Bye")

            # Try to end the outer loop, whatever it's named
            if loopName == "blockTrials":
                continueRoutine =  False
                trials.finished = True
                blockTrials.finished = True
                loopName='breakLoop'

            elif loopName == "breakLoop":
                continueRoutine =  False
                responseBlock2.finished=True
                trials2.finished=True
                blockTrials2.finished=True
                breakLoop.finished = True

            lastLoop.finished = True

        thisExp.addData('speed',speed)
        thisExp.addData('stepSize',dt)
        thisExp.addData('speed',speed)
        thisExp.addData('startId',startId)
        thisExp.addData('targetId',targetId)
        thisExp.addData('startLandmarkPos',landmarks[startId].pos)
        thisExp.addData('experimentExpired',experimentExpired)
        thisExp.addData('visualMode',visualMode)
        thisExp.addData('devMode',devMode)
        thisExp.addData(f'{loopName}_duration',expClock.getTime())
        thisExp.addData('turn',turn)
    ImageComponent targetLandmark2
      image [set every repeat] = public/landmarks/images/imageset1/1.jpg
      pos = (0, targetLandmarkY)
      size = (landmarkWidth, landmarkHeight)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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    PolygonComponent fixationRedReset
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = fixationSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = deg
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  Routine eyeSetup
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = True
      disabled = True
      dummyMode = False
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      disabled = True
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    StartRecording StartRecordinit plugin="psychopy-eyelink"
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    TextComponent text
      letterHeight = 1
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Setting up the experiment.

        Press space to proceed.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent setupLMs
      Code Type = Py
      Begin Routine:
        expClock = core.Clock()

        landmarks = []
        dotsArray = []

        dots.depth = 0.5
        loopName = "blockTrials"
        for i in range(numLandmarks):
            # Create image
            lm = visual.ImageStim(
                win=win,
                name=str(i), units='deg',
                image=f'public/landmarks/images/imageset1/{i}.jpg', mask=None, anchor='center',
                ori=0.0, pos=[0, 0], draggable=False, size=(landmarkWidth, landmarkHeight),
                color=[1,1,1], colorSpace='rgb', opacity=1,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0  # higher depth: behind
            )
            lm.idx = i
            # Create and position dot in front
            dot = visual.Circle(
                win=win,
                radius=0.1,
                fillColor='red',
                lineColor='red',
                units='deg',
                pos=lm.pos,
                opacity=lm.opacity,
                depth=-1.0  # lower depth: in front of image
            )

            landmarks.append(lm)
            dotsArray.append(dot)
  Routine stopEye
    RoutineSettingsComponent stopEye
      saveStartStop = False
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    StopRecording StopRecord plugin="psychopy-eyelink"
      disabled = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Stop Eye Tracking.

        Press space to proceed.
    KeyboardComponent stopResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockSetup
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    CodeComponent blockSetup_2
      Code Type = Py
      Begin Routine:
        visualMode= visualModeOptions[blockTrials.thisN]
        speed = speedOptions[blockTrials.thisN]
  Routine expSetup
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    CodeComponent expSetup_env
      Code Type = Py
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      Before Experiment:
        # import libraries
        import random
        from psychopy import event
        #defining global variables

        experimentExpired = False
      Begin Experiment:
        ## Environment variables start
        imageset=1 # Image set
        landmarkWidth = 5 #Landmark width in degrees
        landmarkHeight = 5 #Landmark height in degrees
        startLandmarkY = 4# Y position of start Landmark in degrees
        targetLandmarkY =  -4# Y position of target Landmark in degrees
        interLandmarkDistance = 5# Distance between two neighboring landmarks in degrees
        trainingStepSizes = [1,1.5]#speed of landmarks during training in terms of degrees per frame
        testingStepSizes = [0.5,0.66,1,1.25,1.5,2]#speed of landmarks during testing in terms of degrees per frame
        numLandmarks = 7 # Total number of Landmarks
        tolerance = 0.25# Amount of permissible error while matching target and start Landmark
        initialTrials = 100# Number of trails as visual for day 2
        stopKey = "s" # A key to stop the experiment at anypoint and then save the data
        nDots = 100 # Number of white dots in background at any one frame
        fixationSize = (0.5,0.5) # Size of fixation dot in degree
        nIter = 10 # number of iteration of second part of the exp
        #dotRadius = # Size of white dots in background
        dotLife = 60 # Number of frames a particular dot will be shown
        blockSize = 15 #15 # Block is collection of Trials. Number of trials in a block
        #screenHeight = # Height of screen in cm
        #objectDistance = # Distance from the eye to the screen in cm
        edgeLandmarkDistance = 12.5 # maximum distance of edge landmarks from the center
        totalTime = 5*60 # total time before the experiment ends automatically
        score = 0
        currentTrialDD = 0
        devMode = False
        ## Environment variables end

        dt = 0.167 # distance between lms is 10deg; this step size is for 10 deg/sec at 60 fps
        #defining global variables
        targetReached = False
        experimentExpired = False
        isTrain = True
        loopName = "blockTrials"
        seed = random.randint(0,9999)

        random.seed(42)

        #Build distance-to-pairs dictionary
        all_distance_to_pairs = {
            k: [(i, j) for i in range(numLandmarks) for j in range(numLandmarks)
                if abs(i - j) == k]
            for k in range(1, numLandmarks)
        }

        #Select half of the pairs for training
        training_pairs = {}

        for k, pairs in all_distance_to_pairs.items():
            shuffled = pairs.copy()
            random.shuffle(shuffled)
            half_n = len(shuffled) // 2
            training_pairs[k] = shuffled[:half_n]
      Begin Routine:
        # each block within a block mode  has different speed and visual mode
        speedOptions = [1,1.5,1.5,1.5,1,1]
        #speedOptions = [0.5,0.66,1,1.25,1.5,2]
        visualModeOptions = [True,True,False,True,True,False]

        # generarte a list of distances
        allDistances = list(range(1,numLandmarks))
        # two list of distances for two block modes
        distances1 = [random.choice(allDistances) for _ in range(blockSize*len(speedOptions))]
        distances2 =  [random.choice(allDistances) for  _ in range(len(speedOptions)*nIter*blockSize)]
        # sampling from distance for two block modes
        pairs1 = [random.choice(training_pairs[distance]) for distance in distances1]
        pairs2 = [random.choice(training_pairs[distance]) for distance in distances2]
        # merge the pairs
        allPairs = pairs1+pairs2
        print("Length of trials",len(pairs1),len(pairs2))
        # randomizing pairs
        random.seed(None)
        random.shuffle(allPairs)

        random.seed(42)
        trainingSpeeds = [s for _ in range(nIter) for s in trainingStepSizes]
        print("ts",trainingSpeeds)
        random.shuffle(trainingSpeeds)
  Routine breakRoutine
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    TextComponent breakText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      opacity = 25
      startVal [time (s)] = 0.0
      units = deg
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      text:
        This concludes this part of the experiment.

        Please take a short break and press the space key when you're ready to proceed to the next part
    CodeComponent blockSetup_3
      Code Type = Py
      Begin Routine:
        visualMode =True
        loopName =  "breakLoop"

        if 'experimentExpired' in globals() and experimentExpired:
            print('dont run breakloop')
            continueRoutine = False
            breakLoop.finished = True
            break
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startRecord
    RoutineSettingsComponent startRecord
      disabled = True
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    CameraSetup CameraSetup2 plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine welcome2
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    TextComponent welcomeText_2
      letterHeight = 0.75
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Mental Navigation Task

        The center image shows your current position and the bottom image your target position.


        Press and hold a key (left/right key) to drift left or right and try to land exactly on the target image.

        You may retry if you miss, but the goal is to succeed in one SINGLE press.
    KeyboardComponent keyWelcome_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome3
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    TextComponent welcomeText_3
      letterHeight = 0.75
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Mental Navigation Task

        There are two modes in this experiment.

        Visual Mode: Images are visible as you move.

        Mental Mode: Images are hidden—you must mentally track your position.

        The sequence shifts at multiple speeds, indicated by the background dot movement.


        Each session lasts 60 minutes.
    KeyboardComponent keyWelcome_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockSetup2
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    CodeComponent block2SetupCode
      Code Type = Py
      Begin Routine:
        speed = trainingSpeeds[blockTrials2.thisN]
Flow
  Routine welcome
  Routine welcome2
  Routine welcome3
  Routine expSetup
  Routine eyeSetup
  LoopInitiator lastLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    LoopInitiator blockTrials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = len(speedOptions)
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      Routine blockSetup
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = blockSize
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        Routine setup
        LoopInitiator responseBlock loopType="TrialHandler"
          loopType = sequential
          nReps = 2
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          Routine trial
        LoopTerminator responseBlock
        Routine reset
      LoopTerminator trials
    LoopTerminator blockTrials
    Routine stopEye
    LoopInitiator breakLoop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 6
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      Routine breakRoutine
      Routine startRecord
      LoopInitiator blockTrials2 loopType="TrialHandler"
        loopType = random
        nReps = 12
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        Routine blockSetup2
        LoopInitiator trials2 loopType="TrialHandler"
          loopType = random
          nReps = 15
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          Routine setup
          LoopInitiator responseBlock2 loopType="TrialHandler"
            loopType = random
            nReps = 2
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            Routine trial
          LoopTerminator responseBlock2
          Routine reset
        LoopTerminator trials2
      LoopTerminator blockTrials2
      Routine stopEye
    LoopTerminator breakLoop
  LoopTerminator lastLoop
  Routine complete
