PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = MentalNavigation_Day1
  eyetracker = MouseGaze
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  mgBlink = ('LEFT_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 0
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Routines
  Routine trial
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    DotsComponent dots
      coherence = 1.0
      dir = 0
      dotLife = 0
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 50
      nDots = 300
      noiseDots = direction
      refreshDots = repeat
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
      units = deg
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    ImageComponent targetLandmark
      image [set every repeat] = public/landmarks/images/imageset1/1.jpg
      pos = (0, targetLandmarkY)
      size = (landmarkWidth, landmarkHeight)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent fixationGreen
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      shape = circle
      size = fixationSize
      startVal [time (s)] = 0.0
      units = deg
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    KeyboardComponent keyPress
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    KeyboardComponent keyRelease
      allowedKeys = 'left','right' 
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent move_images
      Code Type = Py
      Begin Routine:
        ## add logic to  add all images on a line
        dots.speed = 0
        dots.dotLife = -1

        for lm  in  landmarks:
            lm.opacity = 1
        targetLandmark.opacity = 1

        targetLandmark.image = f'public/landmarks/images/imageset1/{targetId}.jpg'

        win.flip()


        if targetReached:
            score += 1
            continueRoutine = False
      Each Frame:
        ## add logic to  move the image for each frame
        #speed = 1
        dt = 1/6

        if loopName == "blockTrials":
            completedTrials  = blockTrials.thisN
        elif loopName == "blockTrials_2":
            completedTrials = blockTrials_2.thisN

        statusttext = f"Current Time : {str(int(expClock.getTime()))} \n Completed Trials:{currentTrialDD} \n Score: {score}"
        timeText.setText(statusttext)
        if  keyRelease.keys == 'left' or keyRelease.keys == 'right':
            targetReached = abs(landmarks[targetId].pos[0])   <= tolerance * landmarkWidth
            dots.dir =  0
            dots.dotLife = -1
            dots.speed = 0

        if keyPress.keys == 'left' or keyPress.keys  == 'right':
            if not visualMode:
                for lm  in  landmarks:
                    lm.opacity = 0
                targetLandmark.opacity = 0

        if  keyPress.keys == 'left':
            dots.dir =  180
            for lm in landmarks:
                if  landmarks[-1].pos[0]<-1*edgeLandmarkDistance:
                    break
                lm.pos -= (speed*dt,0)

            if  landmarks[-1].pos[0]<-1*edgeLandmarkDistance:
                dots.speed = 0
                dots.dotLife = -1
            else:
                dots.speed =  dt
                dots.dotLife = 60

        elif  keyPress.keys == 'right':
            dots.dir = 0
            for lm in landmarks:
                if  landmarks[0].pos[0]>edgeLandmarkDistance:
                    break
                lm.pos += (speed*dt,0)
            if  landmarks[0].pos[0]>edgeLandmarkDistance:
                dots.speed = 0
                dots.dotLife = -1
            else:
                dots.speed =  dt
                dots.dotLife = 60
      End Routine:
        ## check if start and target is same
    TextComponent timeText
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.5
      pos = (6,-5)
      startVal [time (s)] = 0.0
      text = Time: 
      units = deg
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  Routine start
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    PolygonComponent fixation
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = norm
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  Routine delay
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    PolygonComponent fixationRed2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = norm
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  Routine welcome
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    TextComponent welcomeText
      letterHeight = 0.5
      startVal [time (s)] = 0.0
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      text:
        Mental Navigation Task

        Your goal is to reach the target image by shifting through a sequence of images using the left/right arrow keys.

        The center image shows your current position. You must fixate your eyes on the fixation point in the center of the screen.

        Once the fixation point turns green, press and hold a key (left/right key) once to drift left or right and try to land exactly on the target image.

        You may retry if you miss, but the goal is to succeed in one press.

        There are two modes in this experiment.
        Visual Mode: Images are visible as you move.

        Mental Mode: Images are hidden—you must mentally track your position.

        The sequence shifts at two speeds, indicated by the background dot movement.

        Use the dot cue to estimate how far each press will move the sequence.

        Each session lasts 60 minutes.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine complete
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    TextComponent completionText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time.

        Press space or escape key to exit.
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VisualNavigation
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    PolygonComponent fixation_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine setup
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    PolygonComponent fixationRed
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = fixationSize
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random.uniform(0,0.5)
      units = deg
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    CodeComponent initializationCode
      Code Type = Py
      Begin Routine:
        dots.speed = 0
        dots.dotLife = -1

        random.seed(None)

        #distance_to_pairs = training_pairs if isTrain else all_distance_to_pairs

        #distance  = random.randint(1,numLandmarks-1)
        #pairList = distance_to_pairs[distance].copy()
        #random.shuffle(allPairs)

        #currentPair = random.choice(pairList)

        #startId = currentPair[0]
        #targetId =  currentPair[1]
        startId = allPairs[currentTrialDD][0]
        targetId = allPairs[currentTrialDD][1]
        speed = testingSpeeds[currentTrialDD]
        #startId = 1
        #targetId = 2

        targetReached = False

        landmarks = [visual.ImageStim(
            win=win,
            name=str(i), units='deg',
            image=f'public/landmarks/images/imageset1/{i}.jpg', mask=None, anchor='center',
            ori=0.0, pos=[0,0], draggable=False, size=(landmarkWidth, landmarkHeight),
            color=[1,1,1], colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=-1.0)
            for i in range(numLandmarks)
            ]

        for index,lm in enumerate(landmarks):
            lm.pos = ((index - startId) * (landmarkWidth + interLandmarkDistance),startLandmarkY)
            lm.setAutoDraw(True)
  Routine endTrial
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    CodeComponent endCode
      Code Type = Py
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      End Routine:
        for lm in landmarks:
            lm.clearTextures()
        del landmarks
  Routine reset
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    CodeComponent resetCode
      Code Type = Py
      Begin Routine:
        for lm in landmarks:
            lm.opacity = 0
            del lm
        del landmarks
        #core.wait(0.2)
        eyeRecord = False

        if expClock.getTime()>=totalTime:
            print("Time limit reached. Ending experiment")
            continueRoutine = False
            experimentExpired = True
      End Routine:
        if 'experimentExpired' in globals() and experimentExpired:
            print("Received experiment expired signal. Bye")

            # Try to end the outer loop, whatever it's named
            if loopName == "blockTrials":
                blockTrials.finished = True
            elif loopName == "blockTrials_2":
                blockTrials_2.finished = True


        currentTrialDD+=1
  Routine eyeSetup
    RoutineSettingsComponent eyeSetup
      disabled = True
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Setting up the experiment.

        Press space to proceed.
    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = True
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  0.1
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] =  0.1
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startEye
    RoutineSettingsComponent startEye
      disabled = True
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Starting Eye record

        Press space to proceed with the experiment.
    KeyboardComponent startResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stopEye
    RoutineSettingsComponent stopEye
      disabled = True
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Stop Eye Tracking.

        Press space to proceed.
    KeyboardComponent stopResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockSetup
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    CodeComponent blockSetup_2
      Code Type = Py
      Begin Routine:
        speedOptions = [1,1.5,1.5,1.5,1,1]
        #speedOptions = [0.5,0.75,1,1.25,1.5,1.75]
        visualModeOptions = [True,True,True,True,True,True]

        visualMode= visualModeOptions[blockTrials.thisN]
        speed = speedOptions[blockTrials.thisN]
  Routine expSetup
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    CodeComponent expSetup_env
      Code Type = Py
      Before Experiment:
        experimentExpired = False
      Begin Experiment:
        import random
        from psychopy import event

        ## Environment variables start
        imageset=1 # Image set
        landmarkWidth = 5 #Landmark width in degrees
        landmarkHeight = 5 #Landmark height in degrees
        startLandmarkY = 4# Y position of start Landmark in degrees
        targetLandmarkY =  -4# Y position of target Landmark in degrees
        interLandmarkDistance = 5# Distance between two neighboring landmarks in degrees
        trainingStepSizes = [1,1.5]#speed of landmarks during training in terms of degrees per frame
        testingStepSizes = [0.5,0.66,1,1.25,1.5,2]#speed of landmarks during testing in terms of degrees per frame
        numLandmarks = 7 # Total number of Landmarks
        tolerance = 0.25# Amount of permissible error while matching target and start Landmark
        initialTrials = 100# Number of trails as visual for day 2
        stopKey = "s" # A key to stop the experiment at anypoint and then save the data
        nDots = 100 # Number of white dots in background at any one frame
        fixationSize = (0.5,0.5) # Size of fixation dot in degree
        #dotRadius = # Size of white dots in background
        #dotLife = # Number of frames a particular dot will be shown
        blockSize = 2 #15 # Block is collection of Trials. Number of trials in a block
        #screenHeight = # Height of screen in cm
        #objectDistance = # Distance from the eye to the screen in cm
        edgeLandmarkDistance = 12.5 # maximum distance of edge landmarks from the center
        totalTime = 60*60 # total time before the experiment ends automatically
        score = 0
        currentTrialDD = 0
        ## Environment variables end

        dt = 0.167
        targetReached = False
        experimentExpired = False
        isTrain = True
        loopName = "blockTrials"
        seed = random.randint(0,9999)

        random.seed(42)

        # Step 1: Build distance-to-pairs dictionary
        all_distance_to_pairs = {
            k: [(i, j) for i in range(numLandmarks) for j in range(numLandmarks)
                if abs(i - j) == k]
            for k in range(1, numLandmarks)
        }

        # Step 2: Select half of the pairs for training
        training_pairs = {}

        for k, pairs in all_distance_to_pairs.items():
            shuffled = pairs.copy()
            random.shuffle(shuffled)
            half_n = len(shuffled) // 2
            training_pairs[k] = shuffled[:half_n]
      Begin Routine:
        # generarte alist of distances
        allDistances = list(range(1,numLandmarks))
        distances1 = [random.choice(allDistances) for _ in range(blockSize*6)]
        distances2 =  [random.choice(allDistances) for  _ in range(500)]

        pairs1 = [random.choice(training_pairs[distance]) for distance in distances1]
        pairs2 = [random.choice(training_pairs[distance]) for distance in distances2]

        allPairs = pairs1+pairs2

        random.seed(None)
        random.shuffle(allPairs)
        print(allPairs)
  Routine startClock
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    CodeComponent startClock_2
      Code Type = Py
      Begin Routine:
        expClock = core.Clock()
  Routine breakRoutine
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    TextComponent breakText
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 1
      startVal [time (s)] = 0.0
      units = deg
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      text:
        End of first part of the experiment.

        Take a break and press space key whenever you are ready for the next part of the experiment.
    CodeComponent blockSetup_3
      Code Type = Py
      Begin Routine:
        visualMode = False
        loopName =  "blockTrials_2"
        random.seed(42)
        testingSpeeds = [s for _ in range(100) for s in speed]
        random.shuffle(testingSpeeds)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine expSetup
  Routine eyeSetup
  Routine startEye
  Routine startClock
  LoopInitiator blockTrials loopType="TrialHandler"
    loopType = random
    nReps = 6
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    Routine blockSetup
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = blockSize
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      Routine setup
      LoopInitiator responseBlock loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 2
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        Routine trial
      LoopTerminator responseBlock
      Routine reset
    LoopTerminator trials
  LoopTerminator blockTrials
  Routine breakRoutine
  LoopInitiator blockTrials_2 loopType="TrialHandler"
    loopType = random
    nReps = 600
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    Routine setup
    LoopInitiator responseBlock_2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 2
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      Routine trial
    LoopTerminator responseBlock_2
    Routine reset
  LoopTerminator blockTrials_2
  Routine stopEye
  Routine complete
