PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MorseCodeTask
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine welcomRoutine
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    TextComponent welcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome to the experiment.

        You will see a morse code.

        You need to tap the spacebar according to the morse code pattern.
  Routine endRoutine
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  Routine envSetup
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    CodeComponent envSetupCode
      Code Type = Py
      Before Experiment:
        import random
  Routine trial
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    PolygonComponent dash1
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.36
      units = deg
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    PolygonComponent dot1
      fillColor = white
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.72
      stopVal [duration (s)] = 0.12
      units = deg
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    PolygonComponent dot2
      fillColor = white
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.96
      stopVal [duration (s)] = 0.12
      units = deg
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    PolygonComponent dash2
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 1.44
      stopVal [duration (s)] = 0.36
      units = deg
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    PolygonComponent dash3
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 1.92
      stopVal [duration (s)] = 0.36
      units = deg
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    PolygonComponent dot3
      fillColor = white
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 2.64
      stopVal [duration (s)] = 0.12
      units = deg
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    PolygonComponent delay
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 2.76
      stopVal [duration (s)] = random.random()/2
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  Routine testRoutine
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Flow
  Routine welcomRoutine
  Routine envSetup
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
    Routine testRoutine
  LoopTerminator trials
  Routine endRoutine
