PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = deg
  Window size (pixels) = [1440, 900]
  color = -0.0000, 0.0000, 0.0000
  expName = TemporalReproduction
  frameRate = 60
  keyboardBackend = ioHub
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent stimulusWhite1
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[0]
      stopVal [duration (s)] = 0.025
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    PolygonComponent stimulusWhite2
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[1]
      stopVal [duration (s)] = 0.025
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    PolygonComponent stimulusWhite3
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[2]
      stopVal [duration (s)] = 0.025
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    PolygonComponent stimulusWhite4
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[3]
      stopVal [duration (s)] = 0.025
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    PolygonComponent stimulusWhite5
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[4]
      stopVal [duration (s)] = 0.025
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    PolygonComponent stimulusWhite6
      fillColor = white
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = startTimes[5]
      stopVal [duration (s)] = 0.025
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    PolygonComponent fixationRed
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = startTimes[5]
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    TextComponent statusText
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.6
      pos = (0, -0.8)
      startVal [time (s)] = startTimes[5]+0.025
      text = Time: 
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    CodeComponent stimulusCode
      Code Type = Py
      Each Frame:
        try:
            statusText.text = f"""Speed: {speed}  \n
        1 : {startTimes[0]*speed:.2f},{stimulusWhite1.tStart:.2f} \n
        2 : {startTimes[1]*speed:.2f},{stimulusWhite2.tStart:.2f} \n
        3 : {startTimes[2]*speed:.2f},{stimulusWhite3.tStart:.2f}\n
        4 : {startTimes[3]*speed:.2f},{stimulusWhite4.tStart:.2f}\n
        5 : {startTimes[4]*speed:.2f},{stimulusWhite5.tStart:.2f}\n
        6 : {startTimes[5]*speed:.2f},{stimulusWhite6.tStart:.2f}"""
        except:
            statusText.text = ''
        #statusText.text = ''
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = startTimes[5]+0.025
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  Routine welcomeRoutine
    RoutineSettingsComponent welcomeRoutine
      disabled = True
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    TextComponent welcomeText
      letterHeight = 0.75
      startVal [time (s)] = 0.0
      wrapWidth = 25
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      text:
        Temporal Reproduction Task

        You will see brief flashes of light in a temporal pattern. Then, you need to press the spacebar to repeat the pattern of flashes.
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine expSetup
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    CodeComponent expSetup_env
      Code Type = Py
      Before Experiment:
        # import libraries
        import random
        from psychopy import event
        #defining global variables

        experimentExpired = False
      Begin Experiment:
        # Environment variables
        totalTime  = 3525/1000.

        startTimes = [0,325,1025,1500,2400,3500]
        #startTimes = [400,800,1200,1600,2000,2400]
        startTimes = [x/1000. for x in startTimes]

        min_val = min(startTimes)
        max_val = max(startTimes)

        normTimes = [((x - min_val) / (max_val - min_val)) * 20 - 10 for x in startTimes]


        respTimes = [-10,-10,-10,-10,-10,-10]
        normRespTimes =[-10,-10,-10,-10,-10,-10]
        normRespTimes_orig = [-10,-10,-10,-10,-10,-10]

        speedOptions = [ 0.5, 0.66,1, 1.5, 2]
        #speedOptions = [1,1,1,1,1]
      Begin Routine:
        # each block within a block mode  has different speed and visual mode
        random.seed(42)


        # speedOptions = [ 1,1,1,1,1]

        random.shuffle(speedOptions)
  Routine endRoutine
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    TextComponent completionText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Thank you for your time.

        Press space or escape key to exit.
    KeyboardComponent keyEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testRoutine
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    KeyboardComponent respKeyPress
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = startTimes[5]*speed+0.025+3
      store = all keys
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    KeyboardComponent respKeyRelease
      allowedKeys = 'space'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = startTimes[5]*speed+0.025+3
      store = all keys
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    PolygonComponent testPhase
      fillColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = startTimes[5]+0.025+2
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    CodeComponent testCode
      Code Type = Py
      Each Frame:

        # Show stimulus only if key is held
        if len(respKeyRelease.keys)<len(respKeyPress.keys):
            responseGreen.opacity = 1
            win.flip()
        else:
            responseGreen.opacity = 0
            win.flip()
        if len(respKeyRelease.keys) == 5:
            continueRoutine = False
        # Small delay to prevent maxing CPU
        #core.wait(0.01)
    PolygonComponent responseGreen
      fillColor = -1.0000, 1.0000, -1.0000
      opacity = 0
      shape = rectangle
      size = (25, 25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = startTimes[5]+2
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    PolygonComponent fixationRedTest
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = startTimes[5]+2
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  Routine blockSetup
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    CodeComponent blockSetupCode
      Code Type = Py
      Begin Routine:
        speed = speedOptions[speedBlock.thisN]
        startTimes = [0,325,1025,1500,2400,3500]
        #startTimes = [0,400,800,1200,1600,2000]
        startTimes = [(x*speed)/1000. for x in startTimes]
  Routine breakRoutine
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    CodeComponent breakCode
      Code Type = Py
    TextComponent breakText
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        End of this block.
        Take a rest and press space whenever you are ready to proceed to the next block.
    KeyboardComponent breakResp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine feedbackRoutine
    CodeComponent feedBackCode
      Code Type = Py
      Begin Routine:
        min_val = min(startTimes)
        max_val = max(startTimes)

        normTimes = [((x - min_val) / (max_val - min_val)) * 20 - 10 for x in startTimes]


        respTimes = [-10,-10,-10,-10,-10,-10]
        respTimes_orig = [-10,-10,-10,-10,-10,-10]
        normRespTimes =[-10,-10,-10,-10,-10,-10]
        normRespTimes_orig = [-10,-10,-10,-10,-10,-10]

        if respKeyPress.rt:
            respTimes = respKeyPress.rt[:5]

            min_val = min(startTimes)
            max_val = max(startTimes)

            normRespTimes = [((x - min_val) / (max_val - min_val)) * 20 - 10 for x in respTimes]

            respTimes

        for i in  range(len(normRespTimes[:5])):
            normRespTimes_orig[i+1] = normRespTimes[i]
            respTimes_orig[i+1] = respTimes[i]

        corr = np.corrcoef(respTimes_orig, startTimes)[0, 1]
        corrText.text = f'Score : {corr}'
      Each Frame:
        resp1Pos.pos = (normRespTimes_orig[0],stimBar.pos[1]-3)
        resp2Pos.pos = (normRespTimes_orig[1],stimBar.pos[1]-3)
        resp3Pos.pos = (normRespTimes_orig[2],stimBar.pos[1]-3)
        resp4Pos.pos = (normRespTimes_orig[3],stimBar.pos[1]-3)
        resp5Pos.pos = (normRespTimes_orig[4],stimBar.pos[1]-3)
        resp6Pos.pos = (normRespTimes_orig[5],stimBar.pos[1]-3)


        stim1Pos.pos = (normTimes[0],stimBar.pos[1])
        stim2Pos.pos = (normTimes[1],stimBar.pos[1])
        stim3Pos.pos = (normTimes[2],stimBar.pos[1])
        stim4Pos.pos = (normTimes[3],stimBar.pos[1])
        stim5Pos.pos = (normTimes[4],stimBar.pos[1])
        stim6Pos.pos = (normTimes[5],stimBar.pos[1])
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    PolygonComponent stimBar
      fillColor = white
      shape = rectangle
      size = (20, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent responseBar
      fillColor = white
      pos = (stimBar.pos[0], stimBar.pos[1]-3)
      shape = rectangle
      size = (stimBar.width, stimBar.height)
      startVal [time (s)] = 0.0
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    KeyboardComponent feedbackResp
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    PolygonComponent stim1Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[0], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim2Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[1], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim3Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[2], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim4Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[3], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim5Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[4], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent stim6Pos
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[5], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp1Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[0], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp2Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[1], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp3Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[2], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp4Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[3], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp5Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[4], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    PolygonComponent resp6Pos
      fillColor = -1.0000, 1.0000, -1.0000
      lineColor = -1.0000, 1.0000, -1.0000
      pos = (normRespTimes[5], stimBar.pos[1]-3)
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    TextComponent corrText
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 1
      pos = (10, 10)
      startVal [time (s)] = 0.0
      text = Score: 
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  Routine testRout
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    PolygonComponent stimBar_2
      fillColor = white
      shape = rectangle
      size = (20, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent stim5Pos_2
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      pos = (normTimes[4], stimBar.pos[1])
      shape = rectangle
      size = (0.5, stimBar.height)
      startVal [time (s)] = 0.0
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    CodeComponent testPosCode
      Code Type = Py
      Each Frame:
        stim5Pos_2.pos = (-5,0)
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcomeRoutine
  Routine expSetup
  LoopInitiator speedBlock loopType="TrialHandler"
    loopType = random
    nReps = len(speedOptions)
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    Routine blockSetup
    LoopInitiator trialBlock loopType="TrialHandler"
      loopType = random
      nReps = 4
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      LoopInitiator trials loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 15
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        Routine trial
        Routine testRoutine
        Routine feedbackRoutine
      LoopTerminator trials
      Routine breakRoutine
    LoopTerminator trialBlock
  LoopTerminator speedBlock
  Routine endRoutine
